OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  Input Signal
Comment
  Signal Processing
Settings
  Test Name = ASR-Processor

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector "C3;C4;FC3;FC4"
  Channel List = C3;C4;FC3;FC4
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 24
-> Time based epoching
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 1
-> Simple DSP
  Equation = 1.5*x
-> ASR Processor => #6
  Filename to load model = ${Player_ScenarioDirectory}/ASR-Trainer-ref.xml
Input stream=#6.Output Signal, Stimulations stream=#6.Signal Reconstructed -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{Test Name}-output.csv
  Precision = 10
  Append data = false
  Only last matrix = false

Timeout
  Timeout delay = 30
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
