OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)
Comment
  Input Signal
Comment
  Signal Processing
Settings
  Test Name = ASR-Trainer

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 3 -> Identity
-> Identity => #2
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector "C3;C4;FC3;FC4"
  Channel List = C3;C4;FC3;FC4
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 24
-> Time based epoching => #6
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
Stimulations=#2, Input Signal=#6 -> ASR Trainer
  Filename to save model = ${Player_ScenarioDirectory}/$var{Test Name}-output.xml
  Train trigger = OVTK_StimulationId_Train
  Metric = Euclidian
  Channel ratio to reconstruct = 1
  Rejection limit = 5
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
#0.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Stop
