OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)
Settings
  Test Name = Classifier-Processor

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-ssvep-training.ov
Input stream 1=#0.Output stream 3, Input stream 2=#0.Output stream 2 -> Identity => #1
#1.Output stream 1 -> Target Separator => #2
  Lua Script = ${Player_ScenarioDirectory}/scripts/target-separator.lua
  Targets = 0 1 2 3
  Non Targets = 4
  Output Stimulation = OVTK_StimulationId_Target
#1.Output stream 2 -> Temporal Filter => #3
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 24
  0x8d21ff41 = ${Player_ScenarioDirectory}/scripts/temporal-filter-freq-1.cfg
Input signal=#3, Input stimulations=#2.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Time based epoching "TBE"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/scripts/time-based-epoching.cfg
-> Signal Power Log => #6
#1.Output stream 2 -> Temporal Filter => #7
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 24
  0x8d21ff41 = ${Player_ScenarioDirectory}/scripts/temporal-filter-freq-2.cfg
Input signal=#7, Input stimulations=#2.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Time based epoching "TBE"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/scripts/time-based-epoching.cfg
-> Signal Power Log => #10
#1.Output stream 2 -> Temporal Filter => #11
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 24
  0x8d21ff41 = ${Player_ScenarioDirectory}/scripts/temporal-filter-freq-3.cfg
Input signal=#11, Input stimulations=#2.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6
  Epoch offset (in sec) = 1
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Time based epoching "TBE"
  Epoch duration (in sec) = 1
  Epoch intervals (in sec) = 0.5
  0x8d21ff41 = ${Player_ScenarioDirectory}/scripts/time-based-epoching.cfg
-> Signal Power Log => #14
Input stream 1=#6, Input stream 2=#10, Input stream 3=#14 -> Feature aggregator => #15
Features=#15 -> Classifier processor "LDA Native" => #16
  Filename to load configuration from = ${Player_ScenarioDirectory}/LDA-Native-ref.xml
Input stream=#16.Hyperplane distance -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{Test Name}-output.csv
  Precision = 10
  Append data = false
  Only last matrix = false
#0.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
