OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 3 -> Identity => #1
-> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Pause
#0.Output stream 3 -> Switch director => #3
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-epoch-selector.lua
  offset = 0.5
  duration = 4
#0.Output stream 2 -> Temporal Filter => #4
  Filter Type = Band Pass
  Filter Order = 5
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 30
Triggers=#3, Matrix=#4 -> Stream Switch => #5
  Default to output 1 = false
  Switch stim for output 1 = OVTK_GDF_Correct
  Switch stim for output 2 = OVTK_GDF_Incorrect
#5.Output -> CSP Spatial Filter
  Spatial Filter Coefficients = 2.693394e-001 -2.082757e-001 2.391615e-001 2.344401e-001 3.927157e-001 2.381559e-001 1.105450e-001 5.748063e-001 3.098411e-001 2.888676e-001 1.972432e-001 -2.803966e-001 8.610541e-002 -2.669093e-001 -2.873429e-001 -3.080204e-001 -2.313958e-001 -3.049153e-001 -3.205304e-001 -4.424281e-001 -2.981316e-001 -3.624890e-001 -2.713850e-002 -7.049823e-001 -1.550608e-002 -1.321822e-001 1.119925e-001 1.023369e-002 5.826165e-002 -2.615791e-001 -2.637424e-001 -3.941850e-001 4.185020e-001 1.442614e-001 3.069018e-001 3.027673e-001 3.956899e-001 2.814762e-001 2.776705e-001 3.540791e-001 2.828738e-001 3.027926e-001 3.106658e-001 2.946954e-001 8.165735e-001 3.035239e-001 1.979707e-001 2.325919e-001 1.767888e-001 -1.389007e-001 -2.142701e-001 6.029197e-002 1.522051e-001 1.241781e-001 9.543869e-002 2.155692e-001 2.680507e-001 3.076862e-001 3.604533e-001 3.075757e-001 2.513993e-001 2.252315e-001 3.295531e-001 2.891706e-001 4.002560e-001 3.100291e-001
  Number of Output Channels = 6
  Number of Input Channels = 11
  Filter matrix file =
  0x8d21ff41 = ${Player_ScenarioDirectory}/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 0.0625
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #11
Features=#11 -> Classifier processor => #12
  Filename to load configuration from = ${Player_ScenarioDirectory}/motor-imagery-bci-config-classifier.cfg
Expected label=#1, Classification values=#12.Probability values -> ROC curve
  Computation trigger = OVTK_StimulationId_Train
  Amount of class = 2
  Class 1 identifier = OVTK_GDF_Left
  Class 2 identifier = OVTK_GDF_Right
