OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)
Settings
  Test Name = Hilbert-Transform

GDF file reader => #0
  Filename = ${Path_Data}/scenarios/signals/real-hand-movements.gdf
  Samples per buffer = 32
#0.EEG stream -> Channel Selector
  Channel List = 1
  Action = Select
  Channel Matching Method = Smart
-> Hilbert Transform => #2
Input 1=#2.Hilbert Transform, Input 2=#2.Envelope, Input 3=#2.Phase -> Signal Merger
-> Channel Rename => #4
  New channel names = Hilbert;Envelope;Phase
Input stream=#4 -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{Test Name}-output.csv
  Precision = 10
  Append data = false
  Only last matrix = false

Clock stimulator
  Interstimulation interval (in sec) = 5
  Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
