OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)
0x8c1fc55b = 0.0.1
0x9f5c4075 = Simple Scenario for Automatic Test
0xf6b2e3fa = Tests
0xf8034a49 = INRIA
Settings
  Test Name = Spectral-Analysis

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector "1;2"
  Channel List = 1;2
  Action = Select
  Channel Matching Method = Smart
-> Signal Decimation
  Decimation factor = 2
-> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 128
-> Time based epoching
  Epoch 1 duration (in sec) = 1
  Epoch 1 intervals (in sec) = 1
-> Spectral analysis => #6
  Amplitude = true
  Phase = true
  Real Part = true
  Imaginary Part = true
Input stream 1=#6.Amplitude, Input stream 2=#6.Phase, Input stream 3=#6.Real Part, Input stream 4=#6.Imag Part -> Streamed matrix multiplexer => #7
Input stream=#7 -> CSV File Writer
  Filename = ${Player_ScenarioDirectory}/$var{Test Name}-output.csv
  Precision = 10
  Append data = false
  Only last matrix = false

Timeout
  Timeout delay = 5
  Output Stimulation = OVTK_StimulationId_Label_00
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
