OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)
Settings
  Test Name = xDawn

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-motor-imagery.ov
#0.Output stream 3 -> Identity
-> Identity => #2
#0.Output stream 2 -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 20
-> Signal Decimation
  Decimation factor = 4
-> Time based epoching => #5
  Epoch 1 duration (in sec) = 0.25
  Epoch 1 intervals (in sec) = 0.25
#0.Output stream 3 -> Identity => #6
Input signal=#5, Input stimulations=#6 -> Stimulation based epoching => #7
  Epoch duration (in sec) = 0.6
  Epoch offset (in sec) = 0
  Stimulation 1 = OVTK_GDF_Feedback_Continuous
Stimulations=#2, Session signal=#5, Evoked potential epochs=#7 -> xDAWN Trainer
  Train stimulation = OVTK_StimulationId_Train
  Spatial filter configuration = ${Player_ScenarioDirectory}/$var{Test Name}-output.xml
  Filter dimension = 4
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
