OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.3.0)
Settings
  Test Name = ERP-plot

CSV File Reader => #0
  Filename = ${Player_ScenarioDirectory}/$var{Test Name}-input.csv
#0.Output stimulation -> Identity => #1
-> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Stop
Input signal=#0.Output stream, Input stimulations=#0.Output stimulation -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_NonTarget
-> Epoch variance => #4
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.01
Input signal=#0.Output stream, Input stimulations=#0.Output stimulation -> Stimulation based epoching
  Epoch duration (in sec) = 1
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Target
-> Epoch variance => #6
  Averaging type = Cumulative average
  Epoch count = 4
  Significance level = 0.01
Trigger=#1, ERP1=#4.Averaged epochs, Variance1=#4.Variance of epochs, ERP2=#6.Averaged epochs, Variance2=#6.Variance of epochs -> ERP plot
  Filename final figure = ${Player_ScenarioDirectory}/$var{Test Name}-output
  Trigger to save figure = OVTK_StimulationId_ExperimentStop
  X starts at 0 = true
  Line color 1 = 8,20,89
  Line label 1 = Nontarget
  Line color 2 = 100,0,0
  Line label 2 = Target
